---
API: 2.1
OpenSesame: 3.3.11a2
Platform: nt
---
set width 1300
set uniform_coordinates yes
set title "PPP OpenSesame"
set subject_parity even
set subject_nr 0
set start experiment_ppp
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 800
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 25
set font_italic no
set font_family sans
set font_bold no
set experiment_path "//vuw/Public/departments/FSW/FAC/SOLO/Lab-support/001 Opdrachten/lopende projecten programmeurs/COG - Manon and Maria DS5 task"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define inline_script close_usbparmar
	set description "Executes Python code"
	___run__
	from init_and_close_serial_device import close_serial_device
	
	# Close the usbparmar
	close_serial_device(usbparmar)
	__end__
	set _prepare ""

define sequence experiment_ppp
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init always
	run sendpulses always
	run close_usbparmar always

define inline_script init
	set description "Executes Python code"
	___run__
	# import modules:
	import os
	import sys
	
	# Set path to where the current task and python scripts are located:
	os.chdir("E:/ExperimentData/01 - Lopende projecten/DS7 communication")
	cwd = os.getcwd()
	
	# Ad current path to python path (necessary when working with virtual environment):
	sys.path.append(cwd)
	
	from get_com_port import get_port
	from init_and_close_serial_device import init_serial_device
	
	# Get com port where UsbParMarker is connected to:
	com_port_usbparmar = get_port('UsbParMarker')
	
	# Open usbparmar:
	usbparmar = init_serial_device(com_port_usbparmar)
	__end__
	set _prepare ""

define inline_script sendpulses
	set description "Executes Python code"
	___run__
	from usb_par_marker import send_command
	import time
	
	# In this example, two DS7 devices are connected to the UsbParMar bit 64 and 128
	
	# Send pulse to one DS7:
	data = send_command(usbparmar, 64)
	# sleep a bit
	time.sleep(0.02)
	
	# Reset:
	data = send_command(usbparmar, 0)
	
	# Send pulse to the other DS7:
	data = send_command(usbparmar, 128)
	# sleep a bit
	time.sleep(0.02)
	
	# Reset:
	data = send_command(usbparmar, 0)
	
	
	
	
	    
	__end__
	set _prepare ""

